<?xml version="1.0" encoding="UTF-8"?>
<PlusConfiguration version="2.3">
   <DataCollection StartupDelaySec="1.0">
      <DeviceSet Name="Kidney simulator" Description="US configurations with three vessels" />
      <!-- Optical marker tracker-->
      <Device Id="VideoDeviceAruco" Type="MmfVideo" AcquisitionRate="10" FrameSize="640 480" VideoFormat="YUY2" CaptureDeviceId="1">
         <DataSources>
            <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="RGB_COLOR" />
         </DataSources>
         <OutputChannels>
            <OutputChannel Id="VideoStreamARUCO" VideoDataSourceId="Video" />
         </OutputChannels>
      </Device>
      <Device Id="TrackerDevice" Type="OpticalMarkerTracker" CameraCalibrationFile="camera_calibration.yml" ToolReferenceFrame="Tracker" TrackingMethod="OPTICAL_AND_DEPTH" MarkerDictionary="ARUCO_MIP_36h12">
         <DataSources>
            <DataSource Type="Tool" Id="Reference" MarkerId="2" MarkerSizeMm="50" BufferSize="150" />
            <DataSource Type="Tool" Id="Probe" MarkerId="3" MarkerSizeMm="50" BufferSize="150" />
            <DataSource Type="Tool" Id="Needle" MarkerId="4" MarkerSizeMm="50" BufferSize="150" />
         </DataSources>
         <InputChannels>
            <InputChannel Id="VideoStreamARUCO" />
         </InputChannels>
         <OutputChannels>
            <OutputChannel Id="TrackerStream">
               <DataSource Id="Reference" />
               <DataSource Id="Probe" />
               <DataSource Id="Needle" />
            </OutputChannel>
         </OutputChannels>
      </Device>
      <!-- For getting images from the US simulator -->
      <Device Id="VideoDevice" Type="UsSimulator" LocalTimeOffsetSec="0.0" AcquisitionRate="15">
         <DataSources>
            <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" />
         </DataSources>
         <InputChannels>
            <InputChannel Id="TrackerStream" />
         </InputChannels>
         <OutputChannels>
            <OutputChannel Id="USVideoStream" VideoDataSourceId="Video" />
         </OutputChannels>
         <vtkPlusUsSimulatorAlgo
           ImageCoordinateFrame="Image"
           ReferenceCoordinateFrame="Ras"
           IncomingIntensityMwPerCm2="300"
           BrightnessConversionGamma="0.2"
           BrighntessConversionOffset="30"
           NumberOfScanlines="128"
           NumberOfSamplesPerScanline="1000"
           NoiseAmplitude="5.0"
           NoiseFrequency="2.5 3.5 1"
           NoisePhase="50 20 0">
            <SpatialModel
              Name="Air"
              DensityKgPerM3="1.2"
              SoundVelocityMPerSec="343"
              AttenuationCoefficientDbPerCmMhz="100.0"
              BackscatterDiffuseReflectionCoefficient="0.1"
              SurfaceReflectionIntensityDecayDbPerMm="50" />
            
          <SpatialModel
              Name="GelBlock"
              ObjectCoordinateFrame="Ras"
              ModelFile="CubeModel.stl"
              SoundVelocityMPerSec="1540"
          DensityKgPerM3="1800"
          AttenuationCoefficientDbPerCmMhz="0.0001"
          BackscatterDiffuseReflectionCoefficient="0.03"          
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="0.0"/>

            <SpatialModel
              Name="Needle"
              ObjectCoordinateFrame="NeedleTip"
              ModelFile="NeedleModel.stl"
              ModelToObjectTransform="   1 0 0 0       0 1 0 0       0 0 1 0        0 0 0 1"
              DensityKgPerM3="2000"
              SoundVelocityMPerSec="2000"
               AttenuationCoefficientDbPerCmMhz="8.0"
               BackscatterDiffuseReflectionCoefficient="0.2"
               SurfaceSpecularReflectionCoefficient="0.1"
               SurfaceDiffuseReflectionCoefficient="0.0"
               SurfaceReflectionIntensityDecayDbPerMm="5"
               />
               
          <SpatialModel
              Name="Kidney"
              ObjectCoordinateFrame="Ras"
              ModelFile="Kidney.stl"
              
               
               DensityKgPerM3="910"
          SoundVelocityMPerSec="1540"
          AttenuationCoefficientDbPerCmMhz="3.0"
          BackscatterDiffuseReflectionCoefficient="0.1"
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="0.0"
          TransducerSpatialModelMaxOverlapMm="50" />

            <RfProcessing>
               <ScanConversion TransducerName="Ultrasonix_L9-4/38" TransducerGeometry="LINEAR" ImagingDepthMm="60.0" TransducerWidthMm="40.0" OutputImageSizePixel="820 616" TransducerCenterPixel="410 0" OutputImageSpacingMmPerPixel="0.084 0.087" />
            </RfProcessing>
         </vtkPlusUsSimulatorAlgo>
      </Device>
      <Device Id="TrackedVideoDevice" Type="VirtualMixer">
         <InputChannels>
            <InputChannel Id="TrackerStream" />
            <InputChannel Id="USVideoStream" />
         </InputChannels>
         <OutputChannels>
            <OutputChannel Id="TrackedVideoStream" />
         </OutputChannels>
      </Device>
   </DataCollection>
   <CoordinateDefinitions>
      <Transform From="Reference" To="Ras" Matrix="
0.69368 -0.657394 -0.29435 -123.738 
-0.406776 -0.694799 0.593117 147.925 
-0.594425 -0.291698 -0.74938 -425.7 
0 0 0 1 

                    " />
      <Transform From="Image" To="Probe" Matrix="
-0.0999328 0.000210932 -0.0036585 42.073 
-0.000140677 -0.0999814 -0.00192185 -103.664 
-0.00366187 -0.00191541 0.0999146 -4.59973 
0 0 0 1 

                    " />
      <Transform From="NeedleTip" To="Needle" Matrix="
0.999066 5.42101e-20 0.0432116 -1.6326 
0.0432103 -0.00788834 -0.999035 -175.822 
0.000340868 0.999969 -0.00788097 -0.0529402 
0 0 0 1 

                    " />
   </CoordinateDefinitions>
   <PlusOpenIGTLinkServer
     MaxNumberOfIgtlMessagesToSend="10"
     MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="TrackedVideoStream">
      <DefaultClientInfo>
         <MessageTypes>
            <Message Type="IMAGE" />
            <Message Type="TRANSFORM" />
         </MessageTypes>
         <TransformNames>
            <Transform Name="NeedleToReference" />
            <Transform Name="ProbeToReference" />
            <Transform Name="NeedleToProbe" />
         </TransformNames>
         <ImageNames>
            <Image Name="Image" EmbeddedTransformToFrame="Image" />
         </ImageNames>
      </DefaultClientInfo>
   </PlusOpenIGTLinkServer>
</PlusConfiguration>
